CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>.*)_[0-9]{2}_[0-9]_[0-9]_(?P<channel>.*)_[0-9]{3}.tif$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*\\(?P<imagegrp>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Blue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):4,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:3.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:.1
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Median absolute deviation
    # of deviations:0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Green
    Name the primary objects to be identified:Infected
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.6
    Lower and upper bounds on threshold:0.1,1.0
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    Lower outlier fraction:0.02
    Upper outlier fraction:0.02
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:0
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
ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|\g<imagegrp>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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